PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = finalproject_sp24
  keyboardBackend = ioHub
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Routines
  Routine trial
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    CodeComponent trial_manager
      Code Type = Py
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      Begin Experiment:
        #import pandas as pd
        #import random

        target_time = 2.5
        target_begin = 1.0
        trial_time = 3.5
        trial_delay_time = 0.5
        feedback_time = 1.0

        img_size = (0.4, 0.4)
        sqr_size = (0.07, 0.07)
        left_img_offset = (-0.4, 0)
        right_img_offset = (0.4, 0)
        text_height = 0.03

        # load in conditions
        #conditions_data = xlrd.open_workbook("conditions.xlsx").sheet_by_index(0)
        #indices = list(range(1, conditions_data.nrows))
        #random.shuffle(indices)
      Begin Routine:
        #i = indices[(experiment.thisN * 25) + block.thisN]
        #image1 = conditions_data.cell_value(i, 0)
        #image2 = conditions_data.cell_value(i, 1)
        #left_img_pos = conditions_data.cell_value(i, 2)
        #correct_resp = conditions_data.cell_value(i, 3)

        # choose left and right images
        if left_img_pos == 0:
            left_img = "images/" + image1 + ".png"
            right_img = "images/" + image2 + ".png"
        else:
            left_img = "images/" + image2 + ".png"
            right_img = "images/" + image1 + ".png"

        if correct_resp == "z":
            left_text_content = "H"
            right_text_content = "E"
        else:
            left_text_content = "E"
            right_text_content = "H"
      End Routine:
        if not keyresponse.keys:
            errorflag = 1
            feedback_msg = "Too slow"
            print("Too slow...")
        else:
            if keyresponse.corr:
                errorflag = 0
                feedback_msg = ""
                print("Correct!")
            else:
                errorflag = 1
                feedback_msg = "Incorrect response!"
                print("Incorrect...")
    TextComponent fixation
      durationEstim = 5.0
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_time
      text = +
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    ImageComponent left_image
      durationEstim = 5.0
      image [set every repeat] = $left_img
      pos = $left_img_offset
      size = $img_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_time
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    ImageComponent right_image
      durationEstim = 5.0
      image [set every repeat] = $right_img
      pos = $right_img_offset
      size = $img_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_time
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    PolygonComponent left_square
      durationEstim = 3.0
      fillColor = white
      pos = $left_img_offset
      shape = rectangle
      size = $sqr_size
      startEstim = 2.0
      startVal [time (s)] = $target_begin
      stopVal [duration (s)] = $target_time
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    PolygonComponent right_square
      durationEstim = 3.0
      fillColor = white
      pos = $right_img_offset
      shape = rectangle
      size = $sqr_size
      startEstim = 2.0
      startVal [time (s)] = $target_begin
      stopVal [duration (s)] = $target_time
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    TextComponent left_text
      color = -1.0000, -1.0000, -1.0000
      durationEstim = 3.0
      letterHeight = text_height
      pos = $left_img_offset
      startEstim = 2.0
      startVal [time (s)] = $target_begin
      stopVal [duration (s)] = $target_time
      text [set every repeat] = $left_text_content
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    TextComponent right_text
      color = -1.0000, -1.0000, -1.0000
      durationEstim = 3.0
      letterHeight = text_height
      pos = $right_img_offset
      startEstim = 2.0
      startVal [time (s)] = $target_begin
      stopVal [duration (s)] = $target_time
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      text [set every repeat]:
        $right_text_content
    KeyboardComponent keyresponse
      allowedKeys = 'z', 'slash'
      correctAns = $correct_resp
      durationEstim = 3.0
      forceEndRoutine = True
      startEstim = 2.0
      startVal [time (s)] = $target_begin
      stopVal [duration (s)] = $target_time
      store = first key
      storeCorrect = True
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  Routine instructions
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    TextComponent instruct_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will see two objects on either side of your screen.

        After a short delay, letters will appear on top of these objects. Your task is to identify where the letter 'H' appears.

        As quickly as you can:
        Press 'z' if the 'H' is on the left
        Press '/' if the 'H' is on the right

        Press any key to continue.
    KeyboardComponent continue_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin
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    TextComponent ready_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Get ready!
        Press any key to begin.
    KeyboardComponent begin_trials
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
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    TextComponent feedback_txt
      durationEstim = 0.75
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $(errorflag * feedback_time)
      text [set every repeat] = $feedback_msg
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  Routine trial_delay
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    TextComponent trial_delay_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_delay_time
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  Routine pause_break
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    TextComponent break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Feel free to take a brief break if you need to!

        Press any key to continue.
    KeyboardComponent break_end_response
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent block_manager
      Code Type = Py
      Begin Routine:
        if not experiment.thisN % 49 == 0:
            continueRoutine = False
  Routine practice_trial_delay
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    TextComponent practice_delay
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_delay_time
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    CodeComponent end_practice
      Code Type = Py
      Begin Routine:
        if practice_trial_loop.thisN >= 10:
            practice_trial_loop.finished = True
  Routine end
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have completed all trials in this experiment!

        Thank you for participating!
    KeyboardComponent end_experiment
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine begin
  LoopInitiator practice_trial_loop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image1': 'banana', 'image2': 'mug_banana', 'left_img_pos': 0, 'correct_resp': 'z'},
      {'image1': 'banana_blue', 'image2': 'mug_blue', 'left_img_pos': 0, 'correct_resp': 'slash'},
      {'image1': 'banana', 'image2': 'mug_banana', 'left_img_pos': 1, 'correct_resp': 'z'},
      {'image1': 'banana_blue', 'image2': 'mug_blue', 'left_img_pos': 1, 'correct_resp': 'slash'},
      {'image1': 'banana', 'image2': 'cap_banana', 'left_img_pos': 0, 'correct_resp': 'z'},
      {'image1': 'banana_blue', 'image2': 'cap_blue', 'left_img_pos': 0, 'correct_resp': 'slash'},
      {'image1': 'banana', 'image2': 'cap_banana', 'left_img_pos': 1, 'correct_resp': 'z'},
      {'image1': 'banana_blue', 'image2': 'cap_blue', 'left_img_pos': 1, 'correct_resp': 'slash'},
      {'image1': 'banana', 'image2': 'bird_banana', 'left_img_pos': 0, 'correct_resp': 'z'},
      {'image1': 'banana_blue', 'image2': 'bird_blue', 'left_img_pos': 0, 'correct_resp': 'slash'},
      {'image1': 'banana', 'image2': 'bird_banana', 'left_img_pos': 1, 'correct_resp': 'z'},
      {'image1': 'banana_blue', 'image2': 'bird_blue', 'left_img_pos': 1, 'correct_resp': 'slash'},
      {'image1': 'basketball', 'image2': 'mug_basketball', 'left_img_pos': 0, 'correct_resp': 'z'},
      {'image1': 'basketball_green', 'image2': 'mug_green', 'left_img_pos': 0, 'correct_resp': 'slash'},
      {'image1': 'basketball', 'image2': 'mug_basketball', 'left_img_pos': 1, 'correct_resp': 'z'},
      {'image1': 'basketball_green', 'image2': 'mug_green', 'left_img_pos': 1, 'correct_resp': 'slash'}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
    Routine trial
    Routine feedback
    Routine practice_trial_delay
  LoopTerminator practice_trial_loop
  LoopInitiator experiment loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image1': 'banana', 'image2': 'mug_banana', 'left_img_pos': 0, 'correct_resp': 'z'},
      {'image1': 'banana_blue', 'image2': 'mug_blue', 'left_img_pos': 0, 'correct_resp': 'slash'},
      {'image1': 'banana', 'image2': 'mug_banana', 'left_img_pos': 1, 'correct_resp': 'z'},
      {'image1': 'banana_blue', 'image2': 'mug_blue', 'left_img_pos': 1, 'correct_resp': 'slash'},
      {'image1': 'banana', 'image2': 'cap_banana', 'left_img_pos': 0, 'correct_resp': 'z'},
      {'image1': 'banana_blue', 'image2': 'cap_blue', 'left_img_pos': 0, 'correct_resp': 'slash'},
      {'image1': 'banana', 'image2': 'cap_banana', 'left_img_pos': 1, 'correct_resp': 'z'},
      {'image1': 'banana_blue', 'image2': 'cap_blue', 'left_img_pos': 1, 'correct_resp': 'slash'},
      {'image1': 'banana', 'image2': 'bird_banana', 'left_img_pos': 0, 'correct_resp': 'z'},
      {'image1': 'banana_blue', 'image2': 'bird_blue', 'left_img_pos': 0, 'correct_resp': 'slash'},
      {'image1': 'banana', 'image2': 'bird_banana', 'left_img_pos': 1, 'correct_resp': 'z'},
      {'image1': 'banana_blue', 'image2': 'bird_blue', 'left_img_pos': 1, 'correct_resp': 'slash'},
      {'image1': 'basketball', 'image2': 'mug_basketball', 'left_img_pos': 0, 'correct_resp': 'z'},
      {'image1': 'basketball_green', 'image2': 'mug_green', 'left_img_pos': 0, 'correct_resp': 'slash'},
      {'image1': 'basketball', 'image2': 'mug_basketball', 'left_img_pos': 1, 'correct_resp': 'z'},
      {'image1': 'basketball_green', 'image2': 'mug_green', 'left_img_pos': 1, 'correct_resp': 'slash'}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
    Routine pause_break
    Routine trial
    Routine feedback
    Routine trial_delay
  LoopTerminator experiment
  Routine end
